// Registration type and runtime parameters
(Transform "AffineTransform")
(MaximumNumberOfIterations 1000)
(ImagePyramidSchedule 10 10 10)
(NumberOfSpatialSamples 15000)
(FinalGridSpacingInVoxels 50 50 50 )
(Registration "MultiResolutionRegistration")
(CheckNumberOfSamples "false" )
(NumberOfResolutions 1)

// Generation of smoothed representation of input images?
(FixedImagePyramid "FixedSmoothingImagePyramid" )
(MovingImagePyramid "MovingSmoothingImagePyramid" )

// Initial transformation
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "GeometricalCenter")

// How to spread the sample points in the images
(ImageSampler "Random" )
(NewSamplesEveryIteration "true")
(ResultImagePixelType "float")
(DefaultPixelValue 0)
(Optimizer "AdaptiveStochasticGradientDescent")

// Control output during registration. 
// Not needed if you're only interested in the result
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")

// Pixel types of output image data.
// Set to float if your input data are floats
// Will lead to weird output if you co-align unsigned int, but transform float images
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "false")

// About interpolation of involved images.
// Set ResampleInterpolator to NearestNeighbour for Atlas registration 
(Interpolator "NearestNeighborInterpolator" )
(ResampleInterpolator "FinalLinearInterpolator")
(AutomaticParameterEstimation "true")
(AutomaticScalesEstimation "true")
(Metric "AdvancedMattesMutualInformation" )
(NumberOfHistogramBins 32)
(HowToCombineTransforms "Compose")
(ErodeMask "false")
(WriteResultImage "false")
